model iaf_psc_exp_nonlineardendrite_neuron:

  state:
    V_m mV = 0mV             # membrane potential in mV
    z pA = 0pA               # dAP trace
    I_dend_ pA/ms = 0pA/ms   # helper variable for dendritic current in pA/ms
    I_dend pA = 0pA          # dendritic current in pA
    dAP_counts integer = 0
    ref_counts integer = 0

  equations:
    kernel Delta = delta(t)

    # exponential shaped postsynaptic current kernel
    kernel I_kernel1 = exp(-1/tau_syn1*t)

    # alpha shaped postsynaptic current kernel
    kernel I_kernel2 = (e/tau_syn2) * t * exp(-t/tau_syn2)
    
    # exponential shaped postsynaptic current kernel
    kernel I_kernel3 = exp(-1/tau_syn3*t)

    # diff. eq. for membrane potential
    I_dend_' = - I_dend_ / tau_syn2 + alphaD * convolve(Delta,I_2) * pA/ms
    I_dend' = I_dend_ - I_dend / tau_syn2

    inline I_syn pA = convolve(I_kernel1, I_1) * pA + I_dend - convolve(I_kernel3, I_3) * pA + I_e + I_stim
    V_m' = -(V_m-E_L)/tau_m + I_syn/C_m
    
    # diff. eq. for dAP trace
    z' = -z/tau_h

  parameters:
    C_m pF = 250 pF          # capacity of the membrane
    tau_m ms = 20 ms         # membrane time constant.
    tau_syn1 ms = 10 ms      # time constant of synaptic current, port 1
    tau_syn2 ms = 10 ms      # time constant of synaptic current, port 2
    tau_syn3 ms = 10 ms      # time constant of synaptic current, port 3
    tau_h ms = 400 ms        # time constant of the dAP trace 
    V_th mV = 25 mV          # spike threshold 
    V_reset mV = 0 mV        # reset voltage 
    I_e    pA = 0pA          # external current.
    E_L    mV = 0mV          # resting potential.   

    # dendritic action potential     
    theta_dAP pA = 60pA              # current threshold for a dendritic action potential
    I_p pA = 250pA                   # current clamp value for I_dAP during a dendritic action potential 
    tau_dAP ms = 60ms                # time window over which the dendritic current clamp is active
    
    # refractory parameters 
    t_ref ms = 10ms                            # refractory period

  internals:
    dAP_timeout_ticks integer = steps(tau_dAP) 
    ref_timeout_ticks integer = steps(t_ref)    
    alphaD 1/ms = alpha(tau_syn2)

  input:
    I_1 <- spike
    I_2 <- spike
    I_3 <- spike
    I_stim pA <- continuous

  output:
    spike

  update:
    # solve ODEs
    integrate_odes()

    # current-threshold, emit a dendritic action potential
    if dAP_counts == 0:
      if I_dend > theta_dAP:
        z += 1pA
        I_dend = I_p
        dAP_counts = dAP_timeout_ticks
      #else:
        #integrate_odes(I_dend)
    else:
      if dAP_counts == 1:
        I_dend = 0 pA  # switch off dAP current at the end of the dAP
      else:
        I_dend = I_p

      dAP_counts -= 1

    # threshold crossing and refractoriness
    if ref_counts == 0:
      if V_m > V_th:
        emit_spike()
        ref_counts = ref_timeout_ticks
        V_m = V_reset
        dAP_counts = 0
        I_dend = 0pA
    else:
      ref_counts -= 1
      V_m = V_reset

  function alpha(tau_syn2 ms) 1/ms:
    return e/tau_syn2
